/* Frankenhaeuser-Huxley model of the cochlear nerve.
Authors: Lauren Heckelman, Matthew McCann, and Michelle Mueller.

This code is modified from the work by Michael Hines, which describes the FH equation given in the original Frankenhaeuser-Huxley paper. Spiral ganglion cell membrane parameters taken from Frijns, et al. (1995), and Cartee (2006).

The origian code by Hines replicates Figures 1, 3 and 6 in the original Frankenhaeuser-Huxley paper. To validate for yourself, compile the fh.mod function and run fh.hoc.

References:

[1] Frankenhaeuser, B. and Huxley, A. F. (1964)
The action potential in the myelinated nerve fibre of  Xenoupus Laevis
as computed on the basis of voltage clamp data.
J. Physiol. 171: 302-315

[2] Hines, Michael. Xenopus Myelinated Neuron (Frankenhaeuser, Huxley 1964). From http://senselab.med.yale.edu/ModelDB/showModel.cshtml?model=3507

[3] Frijns, J.H.M, de Snoo, S.L., and Schoonhoven, R. (1995) Potential distributions and neural excitation patterns in a rotationally symmetric model of the electrically stimulated cochlea. Hearing Research 87: 170-186

[4] Cartee, Lianne, A. (2006). Spiral ganglion cell site of excitation II: Numerical model analysis. ￼￼Hearing Research 215: 22–30
*/

load_file("nrngui.hoc")

// ----------------------- Global Variables --------------------------------- //

rhoa = 110           // axial resistivity (ohm-cm)
v_init = -65         //initial potential
PNa = 172            //[um^3 / s]
Pk = 6.68            //[um^3 / s]
Gl = 2.43            //[nS]

// Dendrite ------------------------------------------------------------------
D_den = 1             // fiber diameter in um
N_NODES_den = 5       // number of nodes
INL_dend = 175        // internodal length in um

// Soma ----------------------------------------------------------------------
D_soma = 10           // fiber diameter in um
N_NODES_soma = 1      // number of nodes
INL_soma = 50              // internodal length in um

// Axon ----------------------------------------------------------------------
D_axon = 2            // fiber diameter in um
N_NODES_axon = 21     // number of nodes
INL_axon = 100*D_axon      // internodal length in um

// Stimulus ------------------------------------------------------------------
PW = 0.1              // pulse width in ms
DELAY = 1             //in ms
E2F_DIST = 1          //electrode to fiber distance in mm
AMPLITUDE = -4e-1     //cathodic, check units!
tstop = 10
dt = 0.001

// Medium
sigma_e = 1/700 //S/mm

// ----------------------- Creating Axon ------------------------------------ //
create axon[N_NODES_axon]
// initializing axon
proc initialize(){
  for i=0, N_NODES_axon-1 {
		axon[i]{
			nseg = 1
			diam = 0.7*D_axon  // node diameter (um)
			L    = 1		 // node length (um)
			Ra   = rhoa*( (L + INL_axon) / L )  // trick to account for internodal resistance
			cm   = 2					   // specific membrane capacitance (uF/cm^2)
      insert fh
          nai=10  nao=142  ki=141 ko=4.2   // [mM]
          areafac = PI*L*diam/100		/* mamps/cm^2 to namps (units of 1e-6 cm^2) */
          xarea = 3.14 * diam * diam/4    // [um^2]
          sarea = 3.14 * diam * L         // [um^2]
          pnabar =  PNa / sarea / 1e-4    // [cm/s]
          pkbar = PNa / sarea / 1e-4      // [cm/s]
          {celsius=37}                    // Typical human body temperature
      insert pas
          g_pas = Gl * 1e9 / sarea         // [S/cm^2]
	  insert extracellular   // for extracellular stimulation
		}
	}

  for i=0, N_NODES_axon-2 {
		connect axon[i](1), axon[i+1](0)
  }
	finitialize(v_init)
}
initialize()

// ----------------------- Creating Soma -------------------------------------
create soma[N_NODES_soma]
// initializing soma
proc initialize(){
	nseg = 1
	diam = 0.7*D_soma  // node diameter (um)
	L    = 1		  // node length (um)
	Ra   = rhoa*( (L + INL_soma) / L )  // trick to account for internodal resistance
    cm   = 2					       // specific membrane capacitance (uF/cm^2)
    insert fh
        nai=10  nao=142  ki=141 ko=4.2   // [mM]
        areafac = PI*L*diam/100		     /* mamps/cm^2 to namps (units of 1e-6 cm^2) */
        xarea = 3.14 * diam * diam/4    // cross sectional area [um^2]
        sarea = 3.14 * diam * L         // surface area of node [um^2]
        pnabar =  PNa / sarea / 1e-4    // [cm/s]
        pkbar = PNa / sarea / 1e-4      // [cm/s]
        {celsius=37}                     // Typical human body temperature
    insert pas
        g_pas = Gl * 1e9 / sarea         // [S/cm^2]
    insert extracellular   // for extracellular stimulation
	finitialize(v_init)
}
initialize()

// ----------------------- Creating Dendrite ---------------------------------
create dend[N_NODES_den]
// initializing dendrite
proc initialize(){
  for i=0, N_NODES_den-1 {
		dend[i]{
			nseg = 1
			diam = 0.7*D_den     // node diameter (um)
			L    = 1		 // node length (um)
			Ra   = rhoa*( (L + INL_dend) / L )  // trick to account for internodal resistance
			cm   = 2					        // specific membrane capacitance (uF/cm^2)
      insert fh
            nai=10  nao=142  ki=141 ko=4.2   // [mM]
            areafac = PI*L*diam/100		     /* mamps/cm^2 to namps (units of 1e-6 cm^2) */
            xarea = 3.14 * diam * diam/4     // [um^2]
            sarea = 3.14 * diam * L          // [um^2]
            pnabar =  PNa / sarea / 1e-4     // [cm/s]
            pkbar = PNa / sarea / 1e-4       // [cm/s]
            {celsius=37}                     // Typical human body temperature
      insert pas
            g_pas = Gl * 1e9 / sarea         // [S/cm^2]
	  insert extracellular   // for extracellular stimulation
		}
	}

  for i=0, N_NODES_den-2 {
		connect dend[i](1), dend[i+1](0)
  }
	finitialize(v_init)
}
initialize()

// ----------------------- Connect all parts -------------------------------- //
connect dend[N_NODES_den-1](1), soma[0](0)
connect soma[0](1), axon[0](0)
topology()

// HOW DO WE RENAME THIS TO WORK AS A SINGLE UNIT

// ----------------------- Extracellular Stimulation ------------------------ //
tot_NODES = N_NODES_den + N_NODES_soma + N_NODES_axon   // total nodes in neuron

//for keeping track of node positions and Ve at nodes. THIS SHOULD THROW AN ERROR

objref x_neuron, phi_e
x_neuron = new Vector(tot_NODES,0)
phi_e = new Vector(tot_NODES,0)
for i=0, tot_NODES-1{
    if(i <= N_NODES_axon - 1){
		x_neuron.x[i] = -(tot_NODES-1)/2*INL_axon + INL_axon*i //centered at middle node. Only for odd N_NODES
    }
    if(i == N_NODES_axon + N_NODES_soma - 1){
    	x_neuron.x[i] = -(tot_NODES-1)/2*INL_soma + INL_soma*i //centered at middle node. Only for odd N
    }
    if(i >= N_NODES_axon + N_NODES_soma){
    	x_neuron.x[i] = -(tot_NODES-1)/2*INL_dend + INL_dend*i //centered at middle node. Only for odd N
    }
}
x_neuron.mul(1e-3) //convert from um to mm

// for recording membrane potentials
objref vol_mem[tot_NODES]
for i=0, tot_NODES-1{
	vol_mem[i] = new Vector(tstop/dt,0)
  vol_mem[i].record(&node[i].v(0.5))                // THIS SHOULD THROW AN ERROR
}
